PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'response mode': '["keyboard", "mouse click", "hover"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = antisaccade2
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    CodeComponent set_txt
      Code Type = Auto->JS
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      Begin Routine:
        # Display appropriate instructions based on response mode

        if expInfo["response mode"] == "keyboard":
            instructions_text = (
                "In this task, a cue will appear on either the left or right side of the screen.\n\n"
                "If the cue is red, press the arrow key for the opposite side of the screen.\n\n"
                "If the cue is green, press the arrow key for the same side as the cue.\n\n"
                "Press Start when you're ready."
            )

        elif expInfo["response mode"] == "mouse click":
            instructions_text = (
                "In this task, a cue will appear on either the left or right side of the screen.\n\n"
                "If the cue is red, click on the opposite side of the screen from the cue.\n\n"
                "If the cue is green, click on the same side as the cue.\n\n"
                "Press Start when you're ready."
            )

        elif expInfo["response mode"] == "hover":
            instructions_text = (
                "In this task, a cue will appear on either the left or right side of the screen.\n\n"
                "If the cue is red, move your mouse toward the opposite side of the screen from the cue.\n\n"
                "If the cue is green, move your mouse toward the same side as the cue.\n\n"
                "Press Start when you're ready."
            )
    TextboxComponent instructions_txt
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextboxComponent thanks_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 感谢您的参与，再见！
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize correctness flag
        correct = 0

        # Check which response mode is being used and evaluate correctness accordingly

        # If the participant is responding with a mouse click
        if expInfo["response mode"] == "mouse click":

            # Set response time to be the mouse click time
            response_time = mouse.time[0]

            # mouse.corr is assumed to be a list or tuple; check if the first value indicates correctness
            if mouse.corr[0]:
                correct = 1

        # If the participant is responding with the keyboard
        if expInfo["response mode"] == "keyboard":

            # Set response time to be the keypress time
            response_time = key_resp.rt

            # key_resp.corr is expected to be a boolean indicating whether the keypress was correct
            if key_resp.corr:
                correct = 1

        # If the participant is using hover-based input
        if expInfo["response mode"] == "hover":

            # response time was fetched and set in the hover code

            # hover_correct should be a boolean indicating if the hover response was correct
            if hover_correct:
                correct = 1

        # Record correctness in the experiment data
        thisExp.addData("correct", correct)
        thisExp.addData("response_time", response_time)

        # Set feedback text based on whether the response was correct
        if correct:
            fb = "Correct!"
        else:
            fb = "Incorrect"
    TextboxComponent fb_txt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb
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  Routine pra
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    PolygonComponent pra_target
      fillColor [set every repeat] = $target_color
      lineColor [set every repeat] = $target_color
      pos [set every repeat] = (target_x, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent pra_opposite_location
      fillColor = white
      pos [set every repeat] = (opposite_location_x, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = target, opposite_location
      correctAns = answer_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize the correctness flag for hovering
        hover_correct = 0
        response_time = 0
  Routine exp
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    PolygonComponent target
      fillColor [set every repeat] = $target_color
      lineColor [set every repeat] = $target_color
      pos [set every repeat] = (target_x, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent opposite_location
      fillColor = white
      opacity = 0.1
      pos [set every repeat] = (opposite_location_x, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = target, opposite_location
      correctAns = answer_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent hover_code
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize the correctness flag for hovering
        hover_correct = 0
        response_time = 0
      Each Frame:
        # Check if the mouse is over the target location
        if target.contains(mouse):
            # If the mouse is over the target, stop the routine (e.g., end the trial)
            continueRoutine = False
            response_time = t

            # If the mouse hover matches the expected answer ("target"), mark the response as correct
            if answer_mouse == "target":
                hover_correct = 1

        # Check if the mouse is over the opposite location
        if opposite_location.contains(mouse):
            # If the mouse is over the opposite location, stop the routine
            continueRoutine = False
            response_time = t

            # If the mouse hover matches the expected answer ("opposite_location"), mark the response as correct
            if answer_mouse == "opposite_location":
                hover_correct = 1
  Routine prafeedback
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Check if the key press was correct or not.
        # This routine will need to follow another routine with a
        # key response component in it called "key_resp"
        # and the "store correct" option enabled.
        # If your experiment is missing that you will
        # not receive feedback and an error message will be displayed.

        # If a key response component has been added and feedback is functioning.
        # 1. remove lines 12, 13, 15, 22 and 23.
        # 2. dedent lines 16 to 21

        fb_text = 'no key_resp component found - look at the Std out window for info'
        fb_col = 'black'

        try:
            if key_resp.corr:
                fb_text = 'Correct!'
                fb_col = 'green'
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
        except:
            print('Make sure that you have:\n1. a routine with a keyboard component in it called "key_resp"\n 2. In the key_Resp component in the "data" tab select "Store Correct".\n in the "Correct answer" field use "$corrAns" (where corrAns is a column header in your conditions file indicating the correct key press')
    TextComponent fb
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb
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  Routine rest
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Any text

        including line breaks

        This text component is white, so change the colour if you have a white background. It does not save the onset and offset time, but has been left justified with a wrap width of 1.8 norm units.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine rest_2
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    CodeComponent set_txt_2
      Code Type = Auto->JS
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      Begin Routine:
        # Display appropriate instructions based on response mode

        if expInfo["response mode"] == "keyboard":
            instructions_text = (
                "In this task, a cue will appear on either the left or right side of the screen.\n\n"
                "If the cue is red, press the arrow key for the opposite side of the screen.\n\n"
                "If the cue is green, press the arrow key for the same side as the cue.\n\n"
                "Press Start when you're ready."
            )

        elif expInfo["response mode"] == "mouse click":
            instructions_text = (
                "In this task, a cue will appear on either the left or right side of the screen.\n\n"
                "If the cue is red, click on the opposite side of the screen from the cue.\n\n"
                "If the cue is green, click on the same side as the cue.\n\n"
                "Press Start when you're ready."
            )

        elif expInfo["response mode"] == "hover":
            instructions_text = (
                "In this task, a cue will appear on either the left or right side of the screen.\n\n"
                "If the cue is red, move your mouse toward the opposite side of the screen from the cue.\n\n"
                "If the cue is green, move your mouse toward the same side as the cue.\n\n"
                "Press Start when you're ready."
            )
    TextboxComponent instructions_txt_2
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    KeyboardComponent start_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest_3
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    TextComponent restText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = 休息一下，当你休息好后，按任意键进入正式实验
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prainstuctions
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    TextComponent praText
      letterHeight = 0.05
      pos = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        您好，欢迎您参与本次实验。
        接下来，你将进入实验1。
        实验中你将看到红色和绿色两种颜色的圆圈，并且处于左或右不同的位置。
        请你在看到红色圆圈后，在键盘上按下与其所处位置相反的箭头；
        在看到绿色圆圈后，按下与其所处位置相同的箭头。
        读懂上方指导语之后，按空格键即可进入练习。
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prafeedback_2
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_2.corr:
            msg = "Correct!"
        else:
            msg = "Incorrect!"
    TextComponent prafeedbacktext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  Routine prainstuctions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'target_color': 'green', 'target_x': -0.5, 'answer': 'left', 'trial_type': 'prosaccade', 'opposite_location_x': 0.5, 'answer_mouse': 'target'},
      {'target_color': 'green', 'target_x': 0.5, 'answer': 'right', 'trial_type': 'prosaccade', 'opposite_location_x': -0.5, 'answer_mouse': 'target'},
      {'target_color': 'red', 'target_x': -0.5, 'answer': 'right', 'trial_type': 'antisaccade', 'opposite_location_x': 0.5, 'answer_mouse': 'opposite_location'},
      {'target_color': 'red', 'target_x': 0.5, 'answer': 'left', 'trial_type': 'antisaccade', 'opposite_location_x': -0.5, 'answer_mouse': 'opposite_location'}]
    Routine pra
    Routine prafeedback_2
  LoopTerminator trials_2
  Routine rest_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 15
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    conditions:
      [{'target_color': 'green', 'target_x': -0.5, 'answer': 'left', 'trial_type': 'prosaccade', 'opposite_location_x': 0.5, 'answer_mouse': 'target'},
      {'target_color': 'green', 'target_x': 0.5, 'answer': 'right', 'trial_type': 'prosaccade', 'opposite_location_x': -0.5, 'answer_mouse': 'target'},
      {'target_color': 'red', 'target_x': -0.5, 'answer': 'right', 'trial_type': 'antisaccade', 'opposite_location_x': 0.5, 'answer_mouse': 'opposite_location'},
      {'target_color': 'red', 'target_x': 0.5, 'answer': 'left', 'trial_type': 'antisaccade', 'opposite_location_x': -0.5, 'answer_mouse': 'opposite_location'}]
    Routine exp
  LoopTerminator trials
  Routine thanks
